<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details></Details>
        <Title>PRW self-reenforced</Title>
    </Description>
    <Space>
        <Lattice class="square">
            <Neighborhood>
                <Order>optimal</Order>
            </Neighborhood>
            <Size symbol="size" value="cell_spacing * array_size, cell_spacing * array_size , 0"/>
            <BoundaryConditions>
                <Condition type="periodic" boundary="x"/>
                <Condition type="periodic" boundary="y"/>
            </BoundaryConditions>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="4000"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <Analysis>
        <ModelGraph include-tags="#untagged" format="dot" reduced="false"/>
        <Gnuplotter time-step="10">
            <Plot>
                <Cells value="dir.phi"/>
                <CellArrows orientation="dir*10"/>
            </Plot>
            <Terminal name="png" size="1200,1200,0"/>
        </Gnuplotter>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="msd"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot time-step="-1">
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis logarithmic="true">
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis logarithmic="true">
                        <Symbol symbol-ref="msd"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
    </Analysis>
    <Global>
        <Constant symbol="cpm_time_scale" value="1"/>
        <Constant symbol="l_n" name="node length" value="0.2"/>
        <Constant symbol="r" name="cell radius" value="1"/>
        <Constant symbol="a" name="cell area" value="pi*r^2"/>
        <Constant symbol="λ_a" value="1"/>
        <Constant symbol="p" name="cell perimeter" value="2*pi*r">
            <Annotation>we assume an approximately  circular shape</Annotation>
        </Constant>
        <Constant symbol="λ_p" value="2"/>
        <Constant symbol="xi_p" name="..." value="1">
            <Annotation>Correction factor for the estimation of surface length in the CPM. May depend on the neighborhood choice</Annotation>
        </Constant>
        <Constant symbol="mu" name="cell motility strength" value="4"/>
        <Constant symbol="t_half_persist" name="persistence half life" value="0.5"/>
        <Constant symbol="mcs_d" name="MonteCarloStep duration" value="cpm_time_scale*l_n"/>
        <Constant symbol="array_size" value="8"/>
        <Constant symbol="cell_spacing" value="ceil(20*r/l_n)"/>
        <Variable symbol="msd" value="0.0"/>
    </Global>
    <CellTypes>
        <CellType name="cell" class="biological">
            <Constant symbol="a_cpm" name="volume in nodes" value="a/l_n^2"/>
            <Constant symbol="λ_a_cpm" value="λ_a*l_n^4"/>
            <VolumeConstraint target="a_cpm" strength="1"/>
            <Constant symbol="p_cpm" value="p * l_n*xi_p"/>
            <Constant symbol="λ_p_cpm" value="λ_p * (l_n/xi_p)^2"/>
            <SurfaceConstraint target="p_cpm" strength="λ_p_cpm" mode="surface"/>
            <Constant symbol="mu_cpm" value="mu * mcs_d * sqrt(l_n)"/>
            <DirectedMotion strength="mu_cpm" direction="dir"/>
            <Property symbol="α" value="rand_uni(0,2*pi)"/>
            <PropertyVector notation="r,φ,θ" symbol="dir" value="1,α,0"/>
            <System time-step="mcs_d" name="vectorial adjustment" solver="Euler [fixed, O(1)]">
                <Constant symbol="k" name="reenforcement rate" value="-ln(0.5)/t_half_persist"/>
                <VectorRule symbol-ref="dir">
                    <Expression>(1-k*mcs_d) * dir + k*mcs_d * velocity</Expression>
                </VectorRule>
            </System>
            <PropertyVector symbol="cell.center.initial" value="cell.center"/>
            <Function symbol="sqr_displacement" name="squared displacement calculation">
                <Expression>( (cell.center.x-cell.center.initial.x)^2 +(cell.center.y-cell.center.initial.y)^2 ) * l_n^2</Expression>
            </Function>
            <Mapper name="mean ssquared displacement calculation">
                <Input value="sqr_displacement"/>
                <Output symbol-ref="msd" mapping="average"/>
            </Mapper>
            <MotilityReporter time-step="mcs_d">
                <Velocity symbol-ref="velocity"/>
            </MotilityReporter>
            <PropertyVector symbol="velocity" value="0.0, 0.0, 0.0"/>
        </CellType>
    </CellTypes>
    <CellPopulations>
        <Population type="cell" size="1">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="array_size, array_size, 1" displacements="cell_spacing, cell_spacing, 1">
                    <Sphere center="cell_spacing/2, cell_spacing/2, 0" radius="r/l_n"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </CellPopulations>
    <CPM>
        <Interaction/>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>optimal</Order>
            </Neighborhood>
        </ShapeSurface>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="mcs_d"/>
            <MetropolisKinetics temperature="0.5"/>
            <Neighborhood>
                <Order>optimal</Order>
            </Neighborhood>
        </MonteCarloSampler>
    </CPM>
</MorpheusModel>
